<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.2.1">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>mvp</q1:UniformName>
          <q1:ShaderName>Edge</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item1,Source.Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawShader">
          <q1:ShaderName>Edge</q1:ShaderName>
          <q1:DrawMode>Triangles</q1:DrawMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Sink">
        <Name>SetWhite</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="q2:ExpressionTransform">
              <q2:Expression>1.0f</q2:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source,Source,Source</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>color</q1:UniformName>
                <q1:ShaderName>Edge</q1:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawShader">
          <q1:ShaderName>Edge</q1:ShaderName>
          <q1:DrawMode>LineLoop</q1:DrawMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>SetColor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="q2:ExpressionTransform">
              <q2:Expression>1.0f</q2:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>color</q1:UniformName>
                <q1:ShaderName>Edge</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="q2:ExpressionTransform">
              <q2:Expression>0.0f</q2:Expression>
            </Expression>
            <Expression xsi:type="q2:ExpressionTransform">
              <q2:Expression>0.0f</q2:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>6</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.EventArgs.Time</Selector>
      </Expression>
      <Expression xsi:type="Accumulate" />
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property name="Angle" selector="Source.Item1" />
          <Property name="Axis" selector="Source.Item2" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="q2:ExpressionTransform">
        <q2:Expression>it * 0</q2:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateAxisAngleRotation">
          <q1:Axis>
            <q1:X>0</q1:X>
            <q1:Y>502.0569</q1:Y>
            <q1:Z>0</q1:Z>
          </q1:Axis>
          <q1:Angle>0</q1:Angle>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreatePerspectiveFieldOfView">
          <q1:FovY>0.7853982</q1:FovY>
          <q1:AspectRatio>1.33333337</q1:AspectRatio>
          <q1:NearClip>0.1</q1:NearClip>
          <q1:FarClip>1000</q1:FarClip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateLookAt">
          <q1:Eye>
            <q1:X>5</q1:X>
            <q1:Y>5</q1:Y>
            <q1:Z>5</q1:Z>
          </q1:Eye>
          <q1:Target>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
            <q1:Z>0</q1:Z>
          </q1:Target>
          <q1:Up>
            <q1:X>0</q1:X>
            <q1:Y>1</q1:Y>
            <q1:Z>0</q1:Z>
          </q1:Up>
        </Combinator>
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property name="Y" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateVector3">
          <q1:X>0</q1:X>
          <q1:Y>502.0569</q1:Y>
          <q1:Z>0</q1:Z>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>17</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>1</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>18</To>
        <Label>Source2</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.10.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawShader, Bonsai.Shaders, Version=0.10.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.10.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SinkBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.AccumulateBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.InputMappingBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateAxisAngleRotation, Bonsai.Shaders, Version=0.10.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreatePerspectiveFieldOfView, Bonsai.Shaders, Version=0.10.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateLookAt, Bonsai.Shaders, Version=0.10.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateVector3, Bonsai.Shaders, Version=0.10.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>