WorkflowBuilder(Version=2.2.0)
Bonsai.Shaders.UpdateFrame
-> MemberSelector(Selector=Source.EventArgs.Time)
-> Accumulate
-> Bonsai.Scripting.ExpressionTransform
  Expression: it * 25
-> InputMapping(Y)
-> Bonsai.Shaders.CreateTranslation(X=0, Y=124.359711, Z=0)
-> ReplaySubject Root(BufferSize=1)

Timer(DueTime=PT0S, Period=PT0S)
-> SelectMany CreateWorld
    Bonsai.ChampalimaudHardware.Tuna(Port=51002, TunaPort=51003)
    -> GroupBy(KeySelector=Source.Id) => #4
    Bonsai.Shaders.WindowClosed => #10
    #4 -> SelectMany => #11
        WorkflowInput Source1
        -> Merge => #19
        -> MemberSelector(Selector=Source.Id) => #13
        -> SelectMany Id => #9
            WorkflowInput Source1 => #0
            Range(Start=0, Count=4) => #2
            #0, #2 -> CombineLatest
            -> MemberSelector(Selector=Source.Item1)
            -> WorkflowOutput
        #13 -> Take(Count=1)
        -> SelectMany CreateObject
            SubscribeSubject Root => #3
            SubscribeSubject TunaData => #6
            -> MemberSelector(Selector=Source.Position) => #1
            #6 -> MemberSelector(Selector=Source.Scale)
            -> InputMapping(X(selector=Source.X), Y(selector=Source.Y), Z(selector=Source.Z))
            -> Bonsai.Shaders.CreateScale(X=2.49983335, Y=2.5009582, Z=2.50004172) => #26
            #6 -> MemberSelector(Selector=Source.Rotate)
            -> NestedWorkflow EulerAngles
                WorkflowInput Source1 => #0
                -> InputMapping(Angle(selector=Source.Y))
                -> Bonsai.Shaders.CreateRotationY(Angle=1.91628933E-05) => #5
                #0 -> InputMapping(Angle(selector=Source.X))
                -> Bonsai.Shaders.CreateRotationX(Angle=-3.33189973E-06) => #6
                #0 -> InputMapping(Angle(selector=Source.Z))
                -> Bonsai.Shaders.CreateRotationZ(Angle=8.34465E-07) => #7
                #5, #6, #7 -> Zip
                -> Multiply
                -> WorkflowOutput
            -> Scan => #13
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Source.Value) => #2
                #0 -> MemberSelector(Selector=Source.Accumulation) => #3
                #2, #3 -> Zip
                -> Multiply
                -> WorkflowOutput
            SubscribeSubject TunaData
            -> MemberSelector(Selector=Source.Color) => #18
            SubscribeSubject Offset => #36
            #1, #36 -> CombineLatest
            -> Add
            -> InputMapping(X(selector=Source.X), Y(selector=Source.Y), Z(selector=Source.Z))
            -> Bonsai.Shaders.CreateTranslation(X=21.0124989, Y=0.208750367, Z=-37.0225) => #5
            #26, #13, #5 -> Zip
            -> Multiply => #15
            #15, #3 -> CombineLatest
            -> Bonsai.Shaders.SampleOnUpdateFrame
            -> Multiply => #2
            -> Sink DrawObject
                WorkflowInput Source1 => #1
                SubscribeSubject Id => #2
                #1, #2 -> CombineLatest => #5
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Source.Item2)
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Source.Item1)
                -> Sink DrawCube
                    SubscribeSubject Light => #3
                    ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=CubeLight) => #12
                    #3, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=CubeLight)
                    WorkflowInput Source1 => #16
                    SubscribeSubject ViewProjection => #18
                    SubscribeSubject ViewMatrix => #19
                    #18, #19 -> Zip => #17
                    #16, #17 -> CombineLatest
                    -> Bonsai.Shaders.SampleOnUpdateFrame => #14
                    -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
                    -> Multiply => #5
                    #5, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=CubeLight)
                    #14 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
                    -> Multiply => #11
                    #11, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=CubeLight) => #10
                    #10, #12 -> Sink SetColor => #9
                        WorkflowInput Source1 => #0
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=CubeLight) => #3
                        SubscribeSubject TunaData
                        -> MemberSelector(Selector=Source.Color) => #5
                        #0, #5 -> CombineLatest => #6
                        #6, #0 -> Sample
                        -> MemberSelector(Selector=Source.Item2) => #8
                        #8, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CubeLight)
                        -> WorkflowOutput
                    #9, #12 -> Bonsai.Shaders.DrawShader(ShaderName=CubeLight, DrawMode=Quads) => #8
                    #8, #12 -> Sink SetWhite => #6
                        WorkflowInput Source1
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: 1.0f
                        -> MemberSelector(Selector="Source,Source,Source") => #3
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=CubeLight) => #5
                        #3, #5 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CubeLight)
                        -> WorkflowOutput
                    #6, #12 -> Bonsai.Shaders.DrawShader(ShaderName=CubeLight, DrawMode=LineLoop)
                    -> WorkflowOutput
                #5 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Source.Item2)
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Source.Item1)
                -> Sink DrawSphere
                    SubscribeSubject Light => #3
                    ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=IcosphereLight) => #12
                    #3, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=IcosphereLight)
                    WorkflowInput Source1 => #16
                    SubscribeSubject ViewProjection => #18
                    SubscribeSubject ViewMatrix => #19
                    #18, #19 -> Zip => #17
                    #16, #17 -> CombineLatest
                    -> Bonsai.Shaders.SampleOnUpdateFrame => #14
                    -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
                    -> Multiply => #5
                    #5, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=IcosphereLight)
                    #14 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
                    -> Multiply => #11
                    #11, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=IcosphereLight) => #10
                    #10, #12 -> Sink SetColor => #9
                        WorkflowInput Source1 => #0
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=IcosphereLight) => #3
                        SubscribeSubject TunaData
                        -> MemberSelector(Selector=Source.Color) => #5
                        #0, #5 -> CombineLatest => #6
                        #6, #0 -> Sample
                        -> MemberSelector(Selector=Source.Item2) => #8
                        #8, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=IcosphereLight)
                        -> WorkflowOutput
                    #9, #12 -> Bonsai.Shaders.DrawShader(ShaderName=IcosphereLight, DrawMode=Triangles) => #8
                    #8, #12 -> Sink SetWhite => #6
                        WorkflowInput Source1
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: 1.0f
                        -> MemberSelector(Selector="Source,Source,Source") => #3
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=IcosphereLight) => #5
                        #3, #5 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=IcosphereLight)
                        -> WorkflowOutput
                    #6, #12 -> Bonsai.Shaders.DrawShader(ShaderName=IcosphereLight, DrawMode=LineLoop)
                    -> WorkflowOutput
                #5 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Source.Item2)
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Source.Item1)
                -> Sink DrawTetrahedron
                    SubscribeSubject Light => #3
                    ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #12
                    #3, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=TetrahedronLight)
                    WorkflowInput Source1 => #16
                    SubscribeSubject ViewProjection => #18
                    SubscribeSubject ViewMatrix => #19
                    #18, #19 -> Zip => #17
                    #16, #17 -> CombineLatest
                    -> Bonsai.Shaders.SampleOnUpdateFrame => #14
                    -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
                    -> Multiply => #5
                    #5, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=TetrahedronLight)
                    #14 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
                    -> Multiply => #11
                    #11, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=TetrahedronLight) => #10
                    #10, #12 -> Sink SetColor => #9
                        WorkflowInput Source1 => #0
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #3
                        SubscribeSubject TunaData
                        -> MemberSelector(Selector=Source.Color) => #5
                        #0, #5 -> CombineLatest => #6
                        #6, #0 -> Sample
                        -> MemberSelector(Selector=Source.Item2) => #8
                        #8, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=TetrahedronLight)
                        -> WorkflowOutput
                    #9, #12 -> Bonsai.Shaders.DrawShader(ShaderName=TetrahedronLight, DrawMode=Triangles) => #8
                    #8, #12 -> Sink SetWhite => #6
                        WorkflowInput Source1
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: 1.0f
                        -> MemberSelector(Selector="Source,Source,Source") => #3
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #5
                        #3, #5 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=TetrahedronLight)
                        -> WorkflowOutput
                    #6, #12 -> Bonsai.Shaders.DrawShader(ShaderName=TetrahedronLight, DrawMode=LineLoop)
                    -> WorkflowOutput
                #5 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Source.Item2)
                    -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Source.Item1)
                -> Sink DrawOctahedron
                    SubscribeSubject Light => #3
                    ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=OctahedronLight) => #12
                    #3, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=TetrahedronLight)
                    WorkflowInput Source1 => #16
                    SubscribeSubject ViewProjection => #18
                    SubscribeSubject ViewMatrix => #19
                    #18, #19 -> Zip => #17
                    #16, #17 -> CombineLatest
                    -> Bonsai.Shaders.SampleOnUpdateFrame => #14
                    -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
                    -> Multiply => #5
                    #5, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=TetrahedronLight)
                    #14 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
                    -> Multiply => #11
                    #11, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=TetrahedronLight) => #10
                    #10, #12 -> Sink SetColor => #9
                        WorkflowInput Source1 => #0
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #3
                        SubscribeSubject TunaData
                        -> MemberSelector(Selector=Source.Color) => #5
                        #0, #5 -> CombineLatest => #6
                        #6, #0 -> Sample
                        -> MemberSelector(Selector=Source.Item2) => #8
                        #8, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=TetrahedronLight)
                        -> WorkflowOutput
                    #9, #12 -> Bonsai.Shaders.DrawShader(ShaderName=TetrahedronLight, DrawMode=Triangles) => #8
                    #8, #12 -> Sink SetWhite => #6
                        WorkflowInput Source1
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: 1.0f
                        -> MemberSelector(Selector="Source,Source,Source") => #3
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #5
                        #3, #5 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=TetrahedronLight)
                        -> WorkflowOutput
                    #6, #12 -> Bonsai.Shaders.DrawShader(ShaderName=TetrahedronLight, DrawMode=LineLoop)
                    -> WorkflowOutput
                #5 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Source.Item2)
                    -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Source.Item1)
                -> Sink DrawDodecahedron
                    SubscribeSubject Light => #3
                    ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=DodecahedronLight) => #12
                    #3, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=TetrahedronLight)
                    WorkflowInput Source1 => #16
                    SubscribeSubject ViewProjection => #18
                    SubscribeSubject ViewMatrix => #19
                    #18, #19 -> Zip => #17
                    #16, #17 -> CombineLatest
                    -> Bonsai.Shaders.SampleOnUpdateFrame => #14
                    -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
                    -> Multiply => #5
                    #5, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=TetrahedronLight)
                    #14 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
                    -> Multiply => #11
                    #11, #12 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=TetrahedronLight) => #10
                    #10, #12 -> Sink SetColor => #9
                        WorkflowInput Source1 => #0
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #3
                        SubscribeSubject TunaData
                        -> MemberSelector(Selector=Source.Color) => #5
                        #0, #5 -> CombineLatest => #6
                        #6, #0 -> Sample
                        -> MemberSelector(Selector=Source.Item2) => #8
                        #8, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=TetrahedronLight)
                        -> WorkflowOutput
                    #9, #12 -> Bonsai.Shaders.DrawShader(ShaderName=TetrahedronLight, DrawMode=Triangles) => #8
                    #8, #12 -> Sink SetWhite => #6
                        WorkflowInput Source1
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: 1.0f
                        -> MemberSelector(Selector="Source,Source,Source") => #3
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #5
                        #3, #5 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=TetrahedronLight)
                        -> WorkflowOutput
                    #6, #12 -> Bonsai.Shaders.DrawShader(ShaderName=TetrahedronLight, DrawMode=LineLoop)
                    -> WorkflowOutput
            -> WorkflowOutput
            #2, #18 -> CombineLatest => #20
            #20, #2 -> Sample
            -> Slice(Start=0, Step=2, Stop=nil)
            -> Buffer(Count=150, Skip=1) => #17
            Bonsai.Shaders.UpdateFrame => #42
            #17, #42 -> CombineLatest => #41
            #41, #42 -> Sample
            -> MemberSelector(Selector=Source.Item1)
            -> SelectMany => #10
                WorkflowInput Source1
                -> WorkflowOutput
            -> MemberSelector(Selector=Source.Item1)
            -> Sink DrawTrail
                WorkflowInput Source1 => #0
                SubscribeSubject Id => #5
                #0, #5 -> CombineLatest => #2
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Source.Item2)
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Source.Item1)
                -> Sink DrawCubeTrail
                    Bonsai.Shaders.CreateScale(X=0.4, Y=0.4, Z=0.4) => #1
                    ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=CubeLight) => #8
                    SubscribeSubject ViewProjection => #9
                    WorkflowInput Source1 => #10
                    #1, #10 -> CombineLatest
                    -> Multiply => #19
                    SubscribeSubject ViewMatrix => #12
                    #9, #12 -> Zip => #13
                    #19, #13 -> CombineLatest => #7
                    -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
                    -> Multiply => #5
                    #5, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=CubeLight) => #4
                    #4, #8 -> Sink SetColor => #3
                        WorkflowInput Source1 => #0
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=CubeLight) => #3
                        SubscribeSubject Color => #7
                        #0, #7 -> CombineLatest => #4
                        #4, #0 -> Sample
                        -> MemberSelector(Selector=Source.Item2) => #6
                        #6, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CubeLight)
                        -> WorkflowOutput
                    #3, #8 -> Bonsai.Shaders.DrawShader(ShaderName=CubeLight, DrawMode=Quads)
                    -> WorkflowOutput
                    #7 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
                    -> Multiply => #15
                    #15, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=CubeLight)
                    SubscribeSubject Light => #17
                    #17, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=CubeLight)
                #2 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Source.Item2)
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Source.Item1)
                -> Sink DrawSphereTrail
                    Bonsai.Shaders.CreateScale(X=0.4, Y=0.4, Z=0.4) => #1
                    ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=IcosphereLight) => #8
                    SubscribeSubject ViewProjection => #9
                    WorkflowInput Source1 => #10
                    #1, #10 -> CombineLatest
                    -> Multiply => #19
                    SubscribeSubject ViewMatrix => #12
                    #9, #12 -> Zip => #13
                    #19, #13 -> CombineLatest => #7
                    -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
                    -> Multiply => #5
                    #5, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=IcosphereLight) => #4
                    #4, #8 -> Sink SetColor => #3
                        WorkflowInput Source1 => #0
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=IcosphereLight) => #3
                        SubscribeSubject Color => #7
                        #0, #7 -> CombineLatest => #4
                        #4, #0 -> Sample
                        -> MemberSelector(Selector=Source.Item2) => #6
                        #6, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=IcosphereLight)
                        -> WorkflowOutput
                    #3, #8 -> Bonsai.Shaders.DrawShader(ShaderName=IcosphereLight, DrawMode=Triangles)
                    -> WorkflowOutput
                    #7 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
                    -> Multiply => #15
                    #15, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=IcosphereLight)
                    SubscribeSubject Light => #17
                    #17, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=IcosphereLight)
                #2 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Source.Item2)
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Source.Item1)
                -> Sink DrawTetrahedronTrail
                    Bonsai.Shaders.CreateScale(X=0.4, Y=0.4, Z=0.4) => #1
                    ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #8
                    SubscribeSubject ViewProjection => #9
                    WorkflowInput Source1 => #10
                    #1, #10 -> CombineLatest
                    -> Multiply => #19
                    SubscribeSubject ViewMatrix => #12
                    #9, #12 -> Zip => #13
                    #19, #13 -> CombineLatest => #7
                    -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
                    -> Multiply => #5
                    #5, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=TetrahedronLight) => #4
                    #4, #8 -> Sink SetColor => #3
                        WorkflowInput Source1 => #0
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #3
                        SubscribeSubject Color => #7
                        #0, #7 -> CombineLatest => #4
                        #4, #0 -> Sample
                        -> MemberSelector(Selector=Source.Item2) => #6
                        #6, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=TetrahedronLight)
                        -> WorkflowOutput
                    #3, #8 -> Bonsai.Shaders.DrawShader(ShaderName=TetrahedronLight, DrawMode=Triangles)
                    -> WorkflowOutput
                    #7 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
                    -> Multiply => #15
                    #15, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=TetrahedronLight)
                    SubscribeSubject Light => #17
                    #17, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=TetrahedronLight)
                #2 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Source.Item2)
                    -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Source.Item1)
                -> Sink DrawOctahedronTrail
                    Bonsai.Shaders.CreateScale(X=0.4, Y=0.4, Z=0.4) => #1
                    ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=OctahedronLight) => #8
                    SubscribeSubject ViewProjection => #9
                    WorkflowInput Source1 => #10
                    #1, #10 -> CombineLatest
                    -> Multiply => #19
                    SubscribeSubject ViewMatrix => #12
                    #9, #12 -> Zip => #13
                    #19, #13 -> CombineLatest => #7
                    -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
                    -> Multiply => #5
                    #5, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=TetrahedronLight) => #4
                    #4, #8 -> Sink SetColor => #3
                        WorkflowInput Source1 => #0
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #3
                        SubscribeSubject Color => #7
                        #0, #7 -> CombineLatest => #4
                        #4, #0 -> Sample
                        -> MemberSelector(Selector=Source.Item2) => #6
                        #6, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=TetrahedronLight)
                        -> WorkflowOutput
                    #3, #8 -> Bonsai.Shaders.DrawShader(ShaderName=TetrahedronLight, DrawMode=Triangles)
                    -> WorkflowOutput
                    #7 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
                    -> Multiply => #15
                    #15, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=TetrahedronLight)
                    SubscribeSubject Light => #17
                    #17, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=TetrahedronLight)
                #2 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Source.Item2)
                    -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Source.Item1)
                -> Sink DrawDodecahedronTrail
                    Bonsai.Shaders.CreateScale(X=0.4, Y=0.4, Z=0.4) => #1
                    ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=DodecahedronLight) => #8
                    SubscribeSubject ViewProjection => #9
                    WorkflowInput Source1 => #10
                    #1, #10 -> CombineLatest
                    -> Multiply => #19
                    SubscribeSubject ViewMatrix => #12
                    #9, #12 -> Zip => #13
                    #19, #13 -> CombineLatest => #7
                    -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
                    -> Multiply => #5
                    #5, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=TetrahedronLight) => #4
                    #4, #8 -> Sink SetColor => #3
                        WorkflowInput Source1 => #0
                        ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=TetrahedronLight) => #3
                        SubscribeSubject Color => #7
                        #0, #7 -> CombineLatest => #4
                        #4, #0 -> Sample
                        -> MemberSelector(Selector=Source.Item2) => #6
                        #6, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=TetrahedronLight)
                        -> WorkflowOutput
                    #3, #8 -> Bonsai.Shaders.DrawShader(ShaderName=TetrahedronLight, DrawMode=Triangles)
                    -> WorkflowOutput
                    #7 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
                    -> Multiply => #15
                    #15, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=TetrahedronLight)
                    SubscribeSubject Light => #17
                    #17, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=TetrahedronLight)
            #10 -> MemberSelector(Selector=Source.Item2)
            -> ReplaySubject Color(BufferSize=1)

            WorkflowInput Source1 => #28
            -> MemberSelector
            -> Multiply(Operand=IntProperty(Value=5))
            -> Subtract(Operand=IntProperty(Value=50))
            -> InputMapping(Z)
            -> Bonsai.Shaders.CreateVector3(X=21, Y=0, Z=-40)
            -> ReplaySubject Offset(BufferSize=1)
            #28 -> Mod(Operand=IntProperty(Value=5))
            -> ReplaySubject Id(BufferSize=1)
        #19 -> MemberSelector(Selector=Source.Data) => #18
        -> Bonsai.Dsp.SelectChannels(Channels(int=3, int=4, int=5))
        -> Bonsai.Dsp.Rescale(Min=15000, Max=-15000, RangeMin=0, RangeMax=1)
        -> NestedWorkflow Gyro => #6
            WorkflowInput Source1
            -> Bonsai.Dsp.Buffer(Count=4, Skip=1) => #4
            -> Bonsai.Dsp.SelectChannels(Channels(int=0))
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Source.Val0)
            -> Bonsai.Scripting.ExpressionTransform => #0
              Expression: single(it)
            #4 -> Bonsai.Dsp.SelectChannels(Channels(int=1))
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Source.Val0)
            -> Bonsai.Scripting.ExpressionTransform => #9
              Expression: single(it)
            #4 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Source.Val0)
            -> Bonsai.Scripting.ExpressionTransform => #12
              Expression: single(it)
            #0, #9, #12 -> Zip
            -> WorkflowOutput
        -> NestedWorkflow RescaleVector
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Source.Item1) => #2
            #0 -> MemberSelector(Selector=Source.Item2) => #3
            #0 -> MemberSelector(Selector=Source.Item3) => #4
            ExternalizedPropertyOfDoubleRescale RangeMin(MemberName=RangeMin, Value=0) => #8
            ExternalizedPropertyOfDoubleRescale RangeMax(MemberName=RangeMax, Value=5) => #9
            #2, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=5)
            -> Bonsai.Scripting.ExpressionTransform => #11
              Expression: single(it)
            #3, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=5)
            -> Bonsai.Scripting.ExpressionTransform => #12
              Expression: single(it)
            #4, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=5)
            -> Bonsai.Scripting.ExpressionTransform => #13
              Expression: single(it)
            #11, #12, #13 -> Zip
            -> WorkflowOutput
        -> NestedWorkflow Scale => #21
            WorkflowInput Source1
            -> InputMapping(X(selector=Source.Item1), Y(selector=Source.Item2), Z(selector=Source.Item3))
            -> Bonsai.Shaders.CreateVector3(X=2.499625, Y=2.50066662, Z=2.50020838)
            -> WorkflowOutput
        #6 -> NestedWorkflow RescaleVector
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Source.Item1) => #2
            #0 -> MemberSelector(Selector=Source.Item2) => #3
            #0 -> MemberSelector(Selector=Source.Item3) => #4
            ExternalizedPropertyOfDoubleRescale RangeMin(MemberName=RangeMin, Value=-0.05) => #8
            ExternalizedPropertyOfDoubleRescale RangeMax(MemberName=RangeMax, Value=0.05) => #9
            #2, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=-0.05, RangeMax=0.05)
            -> Bonsai.Scripting.ExpressionTransform => #11
              Expression: single(it)
            #3, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=-0.05, RangeMax=0.05)
            -> Bonsai.Scripting.ExpressionTransform => #12
              Expression: single(it)
            #4, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=-0.05, RangeMax=0.05)
            -> Bonsai.Scripting.ExpressionTransform => #13
              Expression: single(it)
            #11, #12, #13 -> Zip
            -> WorkflowOutput
        -> NestedWorkflow Rotate => #27
            WorkflowInput Source1
            -> InputMapping(X(selector=Source.Item1), Y(selector=Source.Item2), Z(selector=Source.Item3))
            -> Bonsai.Shaders.CreateVector3(X=-7.50124445E-06, Y=1.33335589E-05, Z=4.16636476E-06)
            -> WorkflowOutput
        #18 -> Bonsai.Dsp.SelectChannels(Channels(int=6, int=7, int=8))
        -> Bonsai.Dsp.Rescale(Min=1300, Max=-500, RangeMin=0, RangeMax=1)
        -> NestedWorkflow Magnetometer
            WorkflowInput Source1
            -> Bonsai.Dsp.Buffer(Count=4, Skip=1) => #4
            -> Bonsai.Dsp.SelectChannels(Channels(int=0))
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Source.Val0)
            -> Bonsai.Scripting.ExpressionTransform => #0
              Expression: single(it)
            #4 -> Bonsai.Dsp.SelectChannels(Channels(int=1))
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Source.Val0)
            -> Bonsai.Scripting.ExpressionTransform => #9
              Expression: single(it)
            #4 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Source.Val0)
            -> Bonsai.Scripting.ExpressionTransform => #12
              Expression: single(it)
            #0, #9, #12 -> Zip
            -> WorkflowOutput
        -> NestedWorkflow RescaleVector
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Source.Item1) => #2
            #0 -> MemberSelector(Selector=Source.Item2) => #3
            #0 -> MemberSelector(Selector=Source.Item3) => #4
            ExternalizedPropertyOfDoubleRescale RangeMin(MemberName=RangeMin, Value=0) => #8
            ExternalizedPropertyOfDoubleRescale RangeMax(MemberName=RangeMax, Value=1) => #9
            #2, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1)
            -> Bonsai.Scripting.ExpressionTransform => #11
              Expression: single(it)
            #3, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1)
            -> Bonsai.Scripting.ExpressionTransform => #12
              Expression: single(it)
            #4, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1)
            -> Bonsai.Scripting.ExpressionTransform => #13
              Expression: single(it)
            #11, #12, #13 -> Zip
            -> WorkflowOutput
        -> NestedWorkflow Color => #23
            WorkflowInput Source1
            -> InputMapping(X(selector=Source.Item1), Y(selector=Source.Item2), Z(selector=Source.Item3))
            -> Bonsai.Shaders.CreateVector3(X=0.164722189, Y=0.7802778, Z=0.2673611)
            -> WorkflowOutput
        #18 -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2))
        -> Bonsai.Dsp.Rescale(Min=2000, Max=-2000, RangeMin=0, RangeMax=1)
        -> NestedWorkflow Accelerometer
            WorkflowInput Source1
            -> Bonsai.Dsp.Buffer(Count=4, Skip=1) => #4
            -> Bonsai.Dsp.SelectChannels(Channels(int=0))
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Source.Val0)
            -> Bonsai.Scripting.ExpressionTransform => #0
              Expression: single(it)
            #4 -> Bonsai.Dsp.SelectChannels(Channels(int=1))
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Source.Val0)
            -> Bonsai.Scripting.ExpressionTransform => #9
              Expression: single(it)
            #4 -> Bonsai.Dsp.SelectChannels(Channels(int=2))
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Source.Val0)
            -> Bonsai.Scripting.ExpressionTransform => #12
              Expression: single(it)
            #0, #9, #12 -> Zip
            -> WorkflowOutput
        -> NestedWorkflow RescaleVector
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Source.Item1) => #2
            #0 -> MemberSelector(Selector=Source.Item2) => #3
            #0 -> MemberSelector(Selector=Source.Item3) => #4
            ExternalizedPropertyOfDoubleRescale RangeMin(MemberName=RangeMin, Value=10) => #8
            ExternalizedPropertyOfDoubleRescale RangeMax(MemberName=RangeMax, Value=-10) => #9
            #2, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=10, RangeMax=-10)
            -> Bonsai.Scripting.ExpressionTransform => #11
              Expression: single(it)
            #3, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=10, RangeMax=-10)
            -> Bonsai.Scripting.ExpressionTransform => #12
              Expression: single(it)
            #4, #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=10, RangeMax=-10)
            -> Bonsai.Scripting.ExpressionTransform => #13
              Expression: single(it)
            #11, #12, #13 -> Zip
            -> WorkflowOutput
        -> NestedWorkflow Position => #22
            WorkflowInput Source1
            -> InputMapping(X(selector=Source.Item1), Y(selector=Source.Item2), Z(selector=Source.Item3))
            -> Bonsai.Shaders.CreateVector3(X=-0.00375032425, Y=0.199999809, Z=3.02124977)
            -> WorkflowOutput
        #22, #21, #27, #23, #9 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as Position,
            Item2 as Scale,
            Item3 as Rotate,
            Item4 as Color,
            Item5 as Id
            )
        -> NestedWorkflow UnpackDataPerFrame
            WorkflowInput Source1
            -> Buffer(Count=4, Skip=nil)
            -> WindowWorkflow
                WorkflowInput Source1 => #0
                Bonsai.Shaders.UpdateFrame => #2
                #0, #2 -> Zip
                -> MemberSelector(Selector=Source.Item1)
                -> WorkflowOutput
            -> Switch
            -> Bonsai.Shaders.SampleOnUpdateFrame
            -> WorkflowOutput
        -> ReplaySubject TunaData(BufferSize=1)
    #11, #10 -> TakeUntil

    Bonsai.Shaders.UpdateFrame
    -> InputMapping
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=5)
    -> ReplaySubject Light(BufferSize=nil)

    Bonsai.Shaders.Input.KeyDown => #2
    -> Condition => #6
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.EventArgs.Key)
        -> Equal(Operand=WorkflowPropertyOfKey(Value=S))
        -> WorkflowOutput
    #2 -> Condition => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Source.EventArgs.Key)
        -> Equal(Operand=WorkflowPropertyOfKey(Value=A))
        -> WorkflowOutput
    #6 -> SelectMany Sphere
        Bonsai.Shaders.CreateTranslation(X=2, Y=0, Z=0) => #1
        SubscribeSubject Root => #3
        #1, #3 -> CombineLatest
        -> Multiply
        -> Sink DrawObject
            ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=IcosphereLight) => #8
            SubscribeSubject ViewProjection => #9
            WorkflowInput Source1 => #10
            SubscribeSubject ViewMatrix => #12
            #9, #12 -> Zip => #13
            #10, #13 -> CombineLatest => #7
            -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
            -> Multiply => #5
            #5, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=IcosphereLight) => #4
            #4, #8 -> Sink SetColor => #3
                WorkflowInput Source1 => #0
                -> Bonsai.Scripting.ExpressionTransform => #2
                  Expression: 1.0f
                #0 -> Bonsai.Scripting.ExpressionTransform => #4
                  Expression: 0.0f
                #0 -> Bonsai.Scripting.ExpressionTransform => #5
                  Expression: 0.0f
                #2, #4, #5 -> Zip => #6
                ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=IcosphereLight) => #7
                #6, #7 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=IcosphereLight)
                -> WorkflowOutput
            #3, #8 -> Bonsai.Shaders.DrawShader(ShaderName=IcosphereLight, DrawMode=Triangles) => #2
            #2, #8 -> Sink SetWhite => #1
                WorkflowInput Source1
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: 1.0f
                -> MemberSelector(Selector="Source,Source,Source") => #3
                ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=IcosphereLight) => #5
                #3, #5 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=IcosphereLight)
                -> WorkflowOutput
            #1, #8 -> Bonsai.Shaders.DrawShader(ShaderName=IcosphereLight, DrawMode=LineLoop)
            -> WorkflowOutput
            #7 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
            -> Multiply => #15
            #15, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=IcosphereLight)
            SubscribeSubject Light => #17
            #17, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=IcosphereLight)
        -> WorkflowOutput
    #7 -> SelectMany Cube
        SubscribeSubject Root => #2
        Bonsai.Shaders.CreateTranslation(X=-2, Y=0, Z=0) => #4
        #4, #2 -> CombineLatest
        -> Multiply
        -> Sink DrawObject
            ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=CubeLight) => #8
            SubscribeSubject ViewProjection => #9
            WorkflowInput Source1 => #10
            SubscribeSubject ViewMatrix => #12
            #9, #12 -> Zip => #13
            #10, #13 -> CombineLatest => #7
            -> MemberSelector(Selector="Source.Item1,Source.Item2.Item1")
            -> Multiply => #5
            #5, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mvp, ShaderName=CubeLight) => #4
            #4, #8 -> Sink SetColor => #3
                WorkflowInput Source1 => #0
                -> Bonsai.Scripting.ExpressionTransform => #2
                  Expression: 1.0f
                #0 -> Bonsai.Scripting.ExpressionTransform => #4
                  Expression: 0.0f
                #0 -> Bonsai.Scripting.ExpressionTransform => #5
                  Expression: 0.0f
                #2, #4, #5 -> Zip => #6
                ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=CubeLight) => #7
                #6, #7 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CubeLight)
                -> WorkflowOutput
            #3, #8 -> Bonsai.Shaders.DrawShader(ShaderName=CubeLight, DrawMode=Quads) => #2
            #2, #8 -> Sink SetWhite => #1
                WorkflowInput Source1
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: 1.0f
                -> MemberSelector(Selector="Source,Source,Source") => #3
                ExternalizedPropertyOfStringUpdateUniform ShaderName(MemberName=ShaderName, Value=CubeLight) => #5
                #3, #5 -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CubeLight)
                -> WorkflowOutput
            #1, #8 -> Bonsai.Shaders.DrawShader(ShaderName=CubeLight, DrawMode=LineLoop)
            -> WorkflowOutput
            #7 -> MemberSelector(Selector="Source.Item1,Source.Item2.Item2")
            -> Multiply => #15
            #15, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=mv, ShaderName=CubeLight)
            SubscribeSubject Light => #17
            #17, #8 -> Bonsai.Shaders.UpdateUniform(UniformName=lightposition, ShaderName=CubeLight)
        -> WorkflowOutput

    NestedWorkflow Camera => #3
        Bonsai.Shaders.CreatePerspectiveFieldOfView(FovY=0.7853982, AspectRatio=1.33333337, NearClip=0.1, FarClip=1000) => #2
        SubscribeSubject Root
        -> Bonsai.Scripting.ExpressionTransform => #12
          Expression: it.ExtractTranslation()
        Bonsai.Shaders.CreateVector3(X=100, Y=-20, Z=0) => #8
        #12, #8 -> CombineLatest
        -> Add => #10
        Bonsai.Shaders.CreateVector3(X=0, Y=-20, Z=0) => #13
        #12, #13 -> CombineLatest
        -> Add => #15
        #10, #15 -> Zip
        -> InputMapping(Eye(selector=Source.Item1), Target(selector=Source.Item2))
        -> Bonsai.Shaders.CreateLookAt(Eye(X=100, Y=104.341614, Z=0), Target(X=0, Y=104.341614, Z=0), Up(X=0, Y=1, Z=0))
        -> CombineLatest
        -> Multiply => #6
        #6, #2 -> CombineLatest
        -> WorkflowOutput
    -> MemberSelector(Selector=Source.Item1) => #8
    #3 -> Multiply => #9
    #8 -> ReplaySubject ViewMatrix(BufferSize=1)
    #9 -> ReplaySubject ViewProjection(BufferSize=1)
